begintemplate olmrichycell

// public variables
public  pre_list, connect_pre, append_sections, is_art, is_connected, gid, randi
public soma, dendrite, axon
public all, pdend, ddend, basal_list, apical_list, soma_list, axon_list
public x, y, z, position, myroot

public pyramidalcell_list, axoaxoniccell_list, bistratifiedcell_list, cckcell_list
public ivycell_list, ngfcell_list, olmcell_list, pvbasketcell_list, scacell_list
public eccell_list, ca3cell_list, mscell_list

// strings
strdef myroot

// objects
objref syn, pre_list, templist, rootlist

// external variables
external numCellTypes, cellType, fAll, fSyn

// create the sections[segments]
create soma[8], dendrite[52], axon[5]

// set the initialization code, which is run whenever a new object
// of this class is instantiated
proc init() {
	gid = $1
	randi = $2
	// cell sections: soma, dendrites, axon
	append_sections() // append all sections to the section list
	connect_sections()// connect soma, dendrites, axon
	size_sections()	// set the size dimensions of each section
  
	set_nseg()		// set the number of segments in each section
	
	// subcellular mechanisms: channels, pumps, transporters
	insert_mechs()
	set_biophys()
	define_shape()
	get_root()

	pre_list = new List() // define a list for the presynaptic connections
	define_synapses()
}

proc connect_sections() { local i
  for i = 1, 2 connect soma[i](0), soma[i-1](1)
  for i = 3, 4 connect soma[i](0), soma[i-2](1)
  connect soma[5](0), soma[2](1)
  connect soma[6](0), soma[4](1)
  connect soma[7](0), soma[6](1)
  for i = 0, 2 connect dendrite[i](0), soma(1)
  for i = 3, 4 connect dendrite[i](0), dendrite[1](1)
  for i = 5, 6 connect dendrite[i](0), dendrite[2](1)
  for i = 7, 9 connect dendrite[i](0), dendrite[3](1)
  connect dendrite[10](0), soma[3](1)
  for i = 11, 12 connect dendrite[i](0), dendrite[9](1)
  for i = 13, 14 connect dendrite[i](0), soma[i-9](1)
  connect dendrite[15](0), soma[5](1)
  for i = 16, 18 connect dendrite[i](0), dendrite[10](1)
  for i = 19, 20 connect dendrite[i](0), dendrite[13](1)
  connect dendrite[21](0), soma[6](1)
  for i = 22, 24 connect dendrite[i](0), dendrite[15](1)
  for i = 25, 26 connect dendrite[i](0), dendrite[18](1)
  for i = 27, 28 connect dendrite[i](0), dendrite[19](1)
  connect dendrite[29](0), dendrite[21](1)
  for i = 30, 31 connect dendrite[i](0), dendrite[25](1)
  for i = 32, 34 connect dendrite[i](0), dendrite[26](1)
  for i = 35, 36 connect dendrite[i](0), dendrite[29](1)
  for i = 37, 38 connect dendrite[i](0), dendrite[31](1)
  for i = 39, 40 connect dendrite[i](0), dendrite[33](1)
  for i = 41, 43 connect dendrite[i](0), dendrite[34](1)
  for i = 44, 45 connect dendrite[i](0), dendrite[39](1)
  for i = 46, 47 connect dendrite[i](0), dendrite[40](1)
  for i = 48, 49 connect dendrite[i](0), dendrite[46](1)
  for i = 50, 51 connect dendrite[i](0), dendrite[47](1)
  connect axon(0), dendrite[21](1)
  for i = 1, 3 connect axon[i](0), axon[i-1](1)
  connect axon[4](0), axon[2](1)
}

objref all, basal_list, apical_list, soma_list, axon_list
objref pyramidalcell_list, axoaxoniccell_list, bistratifiedcell_list, cckcell_list
objref ivycell_list, ngfcell_list, olmcell_list, pvbasketcell_list, scacell_list
objref eccell_list, ca3cell_list, mscell_list
proc append_sections() {
	objref all, basal_list, apical_list, soma_list, axon_list
	objref pyramidalcell_list, axoaxoniccell_list, bistratifiedcell_list, cckcell_list
	objref ivycell_list, ngfcell_list, olmcell_list, pvbasketcell_list, scacell_list
	objref eccell_list, ca3cell_list, mscell_list
	// Make a list for every section in the cell
	all = new SectionList()	
  basal_list = new SectionList()
  apical_list = new SectionList()
  soma_list = new SectionList()
  axon_list = new SectionList()

	pyramidalcell_list = new SectionList()
	axoaxoniccell_list = new SectionList()
	bistratifiedcell_list = new SectionList()
	cckcell_list = new SectionList()
	ivycell_list = new SectionList()
	ngfcell_list = new SectionList()
	olmcell_list = new SectionList()
	pvbasketcell_list = new SectionList()
	scacell_list = new SectionList()
	eccell_list = new SectionList()
	ca3cell_list = new SectionList()
	mscell_list = new SectionList()

    for i=0, 7 soma[i] all.append()
    for i=0, 51 dendrite[i] all.append()
    for i=0, 4 axon[i] all.append()

    for i=0, 7 soma[i] soma_list.append()
    for i=0, 51 dendrite[i] basal_list.append()
    for i=0, 4 axon[i] axon_list.append()

// precell lists
	forsec basal_list {pyramidalcell_list.append()}
	forsec basal_list {bistratifiedcell_list.append()}
	forsec soma_list {cckcell_list.append()}
	forsec basal_list {ivycell_list.append()}
	forsec soma_list {pvbasketcell_list.append()}
	forsec basal_list {scacell_list.append()}
}


proc size_sections() {
	shape3d_1()
	shape3d_2()
	shape3d_3()
	shape3d_4()
	shape3d_5()
	shape3d_6()
}

proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(138.2, 224.9, 0.01, 5.87)
	pt3dadd(138.2, 224.9, -0.01, 5.87)
  }
  dendrite {pt3dclear()
	pt3dadd(138.2, 224.9, -0.01, 5.87)
	pt3dadd(138.2, 225, -0.01, 5.87)
  }
  dendrite[1] {pt3dclear()
	pt3dadd(138.2, 224.9, -0.01, 5.87)
	pt3dadd(133.2, 224.5, 0.63, 4.69)
	pt3dadd(130.1, 224.7, -0.23, 3.86)
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  }
}
proc shape3d_2() {
  dendrite[8] {  }
  dendrite[9] {pt3dclear()
	pt3dadd(33.58, 325.9, -0.37, 2)
	pt3dadd(32.96, 327.1, -0.37, 2)
	pt3dadd(33.16, 329.2, -0.46, 2)
	pt3dadd(34.92, 332, -0.53, 2)
	pt3dadd(35.31, 334.8, -1.49, 2)
	pt3dadd(31.84, 335, -1.49, 2)
	pt3dadd(27.61, 334.1, -1.49, 2)
  }
  soma[4] {pt3dclear()
	pt3dadd(151.6, 215.4, -0.01, 10.73)
	pt3dadd(156.7, 210.8, -0.01, 5.53)
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  }
}
proc shape3d_3() {
  dendrite[28] {	pt3dadd(213.4, 208.2, 3.01, 3.69)
	pt3dadd(215.6, 206.6, 3.01, 3.69)
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  }
}
proc shape3d_4() {
  dendrite[35] {	pt3dadd(238.4, 142.7, -13.38, 1.01)
	pt3dadd(239, 143.5, -13.38, 1.01)
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  }
}
proc shape3d_5() {
  dendrite[39] {	pt3dadd(98.91, 281.3, -2.16, 2)
	pt3dadd(96.52, 282.9, -2.16, 2)
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  }
}
proc shape3d_6() {
  dendrite[46] {	pt3dadd(38.69, 332.7, -10.68, 1.67)
	pt3dadd(35.69, 333.3, -10.83, 1.67)
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  }
}

external lambda_f
proc set_nseg() {
  soma area(.5) // make sure diam reflects 3d points
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}

proc insert_mechs() {
	for i=0,7 soma[i] {
		insert passsdLAW
		gmax_passsdLAW=1.1231e-05
		erev_passsdLAW=-66.164
		insert KleaksdLAW
		gmax_KleaksdLAW=3.2258e-06
		Ra=300
		cm=0.9
		ek=-95
		insert IMLAW
		gmax_IMLAW=0.000075
		insert IMminretLAW
		gmax_IMminretLAW=0 // 0.000075
		insert IkdrfLAW
		gmax_IkdrfLAW = 0.0006
		insert IkdrsLAW
		gmax_IkdrsLAW = 0.00023
		insert IkaLAW
		gmax_IkaLAW = 0.00025
		insert NasomaLAW
		gmax_NasomaLAW = 0.0107
		ena=90
		insert IhLAW
		gmax_IhLAW = 0.00005
		eh=-32
	}

	for i=0,51 dendrite[i] {
		insert passsdLAW
		gmax_passsdLAW=1.1231e-05
		erev_passsdLAW=-66.164
		insert KleaksdLAW
		gmax_KleaksdLAW=3.2258e-06
		insert IMLAW
		gmax_IMLAW = 0.000075
		insert IMminretLAW
		gmax_IMminretLAW=0 // 0.000075
		insert IkdrfLAW
		gmax_IkdrfLAW = 0.0006
		insert IkdrsLAW
		gmax_IkdrsLAW = 0.00023
		insert IkaLAW
		gmax_IkaLAW = 0.00025
		Ra=300
		cm=0.9
		ek=-95
		insert calLAW
		gmax_calLAW = 0.0025
		insert cadLAW
		insert catLAW
		gmax_catLAW = 0.00025
		insert kcaLAW
		gmax_kcaLAW = 0.00055
		insert NadendLAW
		gmax_NadendLAW = 0.0117
		ena=90
	}

	for i=0,4 axon[i] {insert passaxonLAW
		gmax_passaxonLAW=6.1771e-05
		erev_passaxonLAW=-66.164
		insert KleakaxonLAW
		gmax_KleakaxonLAW=1.7742e-05
		insert IkdrfaxonLAW
		gmax_IkdrfaxonLAW = 0.0006
		insert IkdrsaxonLAW
		gmax_IkdrsaxonLAW = 0.00023
		Ra=300
		cm=0.9
		ek=-95
		insert NaaxonLAW
		gmax_NaaxonLAW = 0.0117
		ena=90
	} 
}

proc set_biophys() {
	forsec all {
		Ra=300
	}
}

	proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma $o2 = new NetCon (&v(1), $o1)
			$o2.threshold = -10
	}

	func is_art()  { return 0 }

proc position(){ local i
	forall {
		for i = 0, n3d()-1 {
			pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
		}
	}
	x = $1  y = $2  z = $3	
}

proc get_root() {local i localobj sref
	rootlist = new SectionList()
	rootlist.allroots()
	i=0
	forsec all {
		sref = new SectionRef()
		if (sref.has_parent==0) {
			myroot = secname()
			i=i+1
		}
	}
	if (i>1) {
		print "WARNING: cell ", gid, " has ", i, " root sections!"
	}
}

objref syn
proc define_synapses() {
	{celltype = 0}
	{i = 0}
	{i_st = 0}
	{i_en = 0}
	{findme = 0}
	{xopen("../cells/synapses/syn_olmcell.hoc")}
}
endtemplate olmrichycell
