begintemplate olmstarcell

// public variables
public  pre_list, connect_pre, append_sections, is_art, is_connected, gid, randi
public soma, dendrite, axon
public all, pdend, ddend, basal_list, apical_list, soma_list, axon_list
public x, y, z, position, myroot

public pyramidalcell_list, axoaxoniccell_list, bistratifiedcell_list, cckcell_list
public ivycell_list, ngfcell_list, olmcell_list, pvbasketcell_list, scacell_list
public eccell_list, ca3cell_list, mscell_list

// strings
strdef myroot

// objects
objref syn, pre_list, templist, rootlist

// external variables
external numCellTypes, cellType, fAll, fSyn

// create the sections[segments]
create soma[9], dendrite[44], axon[8]

// set the initialization code, which is run whenever a new object
// of this class is instantiated
proc init() {
	gid = $1
	randi = $2
	// cell sections: soma, dendrites, axon
	append_sections() // append all sections to the section list
	connect_sections()// connect soma, dendrites, axon
	size_sections()	// set the size dimensions of each section
  
	set_nseg()		// set the number of segments in each section
	
	// subcellular mechanisms: channels, pumps, transporters
	insert_mechs()
	set_biophys()
	define_shape()
	get_root()

	pre_list = new List() // define a list for the presynaptic connections
	define_synapses()
}

proc connect_sections() { local i
  for i = 1, 2 connect soma[i](0), soma(1)
  for i = 3, 4 connect soma[i](0), soma[1](1)
  for i = 5, 6 connect soma[i](0), soma[3](1)
  for i = 7, 8 connect soma[i](0), soma[5](1)
  connect dendrite(0), soma[2](1)
  connect dendrite[1](0), soma[4](1)
  for i = 2, 3 connect dendrite[i](0), dendrite(1)
  connect dendrite[4](0), soma[6](1)
  for i = 5, 6 connect dendrite[i](0), dendrite[3](1)
  for i = 7, 8 connect dendrite[i](0), soma[7](1)
  connect dendrite[9](0), soma[8](1)
  for i = 10, 11 connect dendrite[i](0), dendrite[5](1)
  for i = 12, 13 connect dendrite[i](0), dendrite[6](1)
  for i = 14, 15 connect dendrite[i](0), dendrite[7](1)
  for i = 16, 17 connect dendrite[i](0), dendrite[8](1)
  for i = 18, 19 connect dendrite[i](0), dendrite[9](1)
  for i = 20, 21 connect dendrite[i](0), dendrite[11](1)
  for i = 22, 23 connect dendrite[i](0), dendrite[16](1)
  for i = 24, 25 connect dendrite[i](0), dendrite[18](1)
  for i = 26, 27 connect dendrite[i](0), dendrite[19](1)
  for i = 28, 29 connect dendrite[i](0), dendrite[20](1)
  for i = 30, 31 connect dendrite[i](0), dendrite[21](1)
  for i = 32, 33 connect dendrite[i](0), dendrite[26](1)
  for i = 34, 35 connect dendrite[i](0), dendrite[32](1)
  for i = 36, 37 connect dendrite[i](0), dendrite[33](1)
  for i = 38, 39 connect dendrite[i](0), dendrite[36](1)
  for i = 40, 41 connect dendrite[i](0), dendrite[37](1)
  for i = 42, 43 connect dendrite[i](0), dendrite[39](1)
  connect axon(0), dendrite[15](1)
  for i = 1, 4 connect axon[i](0), axon[i-1](1)
  connect axon[5](0), axon[3](1)
  for i = 6, 7 connect axon[i](0), axon[i-1](1)
}

objref all, basal_list, apical_list, soma_list, axon_list
objref pyramidalcell_list, axoaxoniccell_list, bistratifiedcell_list, cckcell_list
objref ivycell_list, ngfcell_list, olmcell_list, pvbasketcell_list, scacell_list
objref eccell_list, ca3cell_list, mscell_list
proc append_sections() {
	objref all, basal_list, apical_list, soma_list, axon_list
	objref pyramidalcell_list, axoaxoniccell_list, bistratifiedcell_list, cckcell_list
	objref ivycell_list, ngfcell_list, olmcell_list, pvbasketcell_list, scacell_list
	objref eccell_list, ca3cell_list, mscell_list
	// Make a list for every section in the cell
	all = new SectionList()	
  basal_list = new SectionList()
  apical_list = new SectionList()
  soma_list = new SectionList()
  axon_list = new SectionList()

	pyramidalcell_list = new SectionList()
	axoaxoniccell_list = new SectionList()
	bistratifiedcell_list = new SectionList()
	cckcell_list = new SectionList()
	ivycell_list = new SectionList()
	ngfcell_list = new SectionList()
	olmcell_list = new SectionList()
	pvbasketcell_list = new SectionList()
	scacell_list = new SectionList()
	eccell_list = new SectionList()
	ca3cell_list = new SectionList()
	mscell_list = new SectionList()

    for i=0, 8 soma[i] all.append()
    for i=0, 43 dendrite[i] all.append()
    for i=0, 7 axon[i] all.append()

    for i=0, 8 soma[i] soma_list.append()
    for i=0, 43 dendrite[i] basal_list.append()
    for i=0, 7 axon[i] axon_list.append()

// precell lists
	forsec basal_list {pyramidalcell_list.append()}
	forsec basal_list {bistratifiedcell_list.append()}
	forsec soma_list {cckcell_list.append()}
	forsec basal_list {ivycell_list.append()}
	forsec soma_list {pvbasketcell_list.append()}
	forsec basal_list {scacell_list.append()}
}


proc size_sections() {
	shape3d_1()
	shape3d_2()
	shape3d_3()
	shape3d_4()
	shape3d_5()
	shape3d_6()
}

proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-27.32, -384.37, -1.08, 3.33)
	pt3dadd(-27.32, -384.37, -1.09, 3.33)
	pt3dadd(-28.55, -384.88, -1.09, 4.67)
  }
  soma[1] {pt3dclear()
	pt3dadd(-28.55, -384.88, -1.09, 4.67)
	pt3dadd(-30.29, -384.15, -1.09, 6.67)
	pt3dadd(-33.19, -384.98, -1.09, 7.67)
  }
  soma[2] {pt3dclear()
	pt3dadd(-28.55, -384.88, -1.09, 4.67)
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  }
}
proc shape3d_2() {
  dendrite[6] {	pt3dadd(20.02, -400.59, -1.24, 1.33)
	pt3dadd(21.69, -400.27, -1.12, 1.33)
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  }
}
proc shape3d_3() {
  dendrite[16] {	pt3dadd(-78.08, -376.76, -0.73, 1.33)
	pt3dadd(-78.84, -374.91, -0.76, 1.33)
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  }
}
proc shape3d_4() {
  dendrite[22] {	pt3dadd(-84.661, -375.265, 0.557, 1)
	pt3dadd(-83.191, -376.045, 0.557, 1)
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  }
}
proc shape3d_5() {
  axon[1] {	pt3dadd(-146.83, -501.42, -2.33, 0.67)
	pt3dadd(-146.63, -502.78, -2.33, 0.67)
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  }
}
proc shape3d_6() {
  axon[5] {	pt3dadd(-207.16, -571.41, -2.48, 0.67)
	pt3dadd(-209.37, -573.03, -2.48, 0.67)
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  }
}

external lambda_f
proc set_nseg() {
  soma area(.5) // make sure diam reflects 3d points
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}

proc insert_mechs() {
	for i=0,8 soma[i] {
		insert passsdLAW
		g_passsdLAW=1.273e-05
		erev_passsdLAW=-59.419
		insert KleaksdLAW
		gkl_KleaksdLAW=3.1262e-06
		Ra=300
		cm=0.9
		ek=-95
		insert IMLAW
		gbar_IMLAW=0.000012
			insert IkdrfLAW
			gbar_IkdrfLAW = 0.0006
			insert IkdrsLAW
			gbar_IkdrsLAW = 0.00023
			insert IkaLAW
			gbar_IkaLAW = 0.00025
		insert NasomaLAW
		gna_Nasoma = 0.0107
		ena=90
		insert IhLAW
		gkhbar_Ih=0.00005
		eh=-32
	}

	for i=0,43 dendrite[i] {
		insert passsdLAW
		g_passsdLAW=1.273e-05
		erev_passsdLAW=-59.419
		insert KleaksdLAW
		gkl_KleaksdLAW=3.1262e-06
		insert IMLAW
			gbar_IMLAW = 0.000012
			insert IkdrfLAW
			gbar_IkdrfLAW = 0.0006
			insert IkdrsLAW
			gbar_IkdrsLAW = 0.00023
			insert IkaLAW
			gbar_IkaLAW = 0.00025
		Ra=300
		cm=0.9
		ek=-95
			insert calLAW
			gcalbar_calLAW = 0.0025
			insert cadLAW
			insert catLAW
			gbar_catLAW = 0.00025
			insert kcaLAW
			gkbar_kcaLAW = 0.00055
			insert NadendLAW
			gna_NadendLAW = 0.0117
			ena=90
	}

	for i=0,7 axon[i] {insert passaxonLAW
		g_passaxonLAW=4.3282e-05
		erev_passaxonLAW=-59.419
		insert KleakaxonLAW
		gkl_KleakaxonLAW=1.0629e-05
		insert IkdrfLAW
			gbar_IkdrfLAW = 0.0006
			insert IkdrsLAW
			gbar_IkdrsLAW = 0.00023
		Ra=300
		cm=0.9
		ek=-95
		insert NadendLAW
		gna_NadendLAW = 0.0117
		ena=90
	} 
}

proc set_biophys() {
	forsec all {
		Ra=300
	}
}

	proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma $o2 = new NetCon (&v(1), $o1)
			$o2.threshold = -10
	}

	func is_art()  { return 0 }

proc position(){ local i
	forall {
		for i = 0, n3d()-1 {
			pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
		}
	}
	x = $1  y = $2  z = $3	
}

proc get_root() {local i localobj sref
	rootlist = new SectionList()
	rootlist.allroots()
	i=0
	forsec all {
		sref = new SectionRef()
		if (sref.has_parent==0) {
			myroot = secname()
			i=i+1
		}
	}
	if (i>1) {
		print "WARNING: cell ", gid, " has ", i, " root sections!"
	}
}

objref syn
proc define_synapses() {
	{celltype = 0}
	{i = 0}
	{i_st = 0}
	{i_en = 0}
	{findme = 0}
	{xopen("../cells/synapses/syn_olmcell.hoc")}
}
endtemplate olmstarcell
