/************************************************************
For more information, consult ModelDoc.pdf
************************************************************/

loadstart = startsw()					// record the start time of the set up
/***********************************************************************************************
I.  LOAD LIBRARIES
***********************************************************************************************/
{load_file("nrngui.hoc")}				// Standard definitions - NEURON library file

{load_file("netparmpi.hoc")}			// Contains the template that defines the properties of
										//  the ParallelNetManager class, which is used to set
										//   up a network that runs on parallel processors
										
{load_file("./setupfiles/ranstream.hoc")}	// Contains the template that defines a RandomStream
											//  class used to produce random numbers for variability
											
{load_file("./setupfiles/CellCategoryInfo.hoc")}	// Contains the template that defines a 
													//  CellCategoryInfo class used to store
													// 	celltype-specific parameters

{load_file("./setupfiles/SynStore.hoc")}	// Contains the template that defines a holder of
											//  synapse type info
													
{load_file("./setupfiles/defaultvar.hoc")}	// Contains the proc definition for default_var proc

{load_file("./setupfiles/parameters.hoc")}	// Loads in operational and model parameters that can
											//  be changed at command line	
										
{load_file("./setupfiles/set_other_parameters.hoc")}// Loads in operational and model parameters
													//  that can't be changed at command line

//{load_file("./setupfiles/check_for_files.hoc")}	// Checks that the necessary chosen files exist
							//  (datasets, connectivity, and stimulation)
                                                        
                                                        
                                                            
/***********************************************************************************************
II. SET MODEL SIZE, CELL DEFINITIONS
***********************************************************************************************/
celsius=34

{load_file("./setupfiles/load_cell_category_info.hoc")}	// Reads the 'cells2include.hoc' file and
														//  loads the information into one
														//  'CellCategoryInfo' object for each cell
														//  type (realistic and artificial cells).
														//  Info includes number of cells, gid
														//  ranges, type name 


{load_file("./setupfiles/load_cell_conns.hoc")}	// Load in the cell connectivity info
{load_file("./setupfiles/load_cell_syns.hoc")}	// Load in the synapse info

strdef tempFileStr						// Define a string reference to store the name of the
										//  current cell template file

proc loadCellTemplates(){local i		// Proc to load the template that defines (each) cell class

	for i=0, numCellTypes-1 {			// Iterate over each cell type in cells2include (and art cells?)
	
		sprint(tempFileStr,"./cells/class_%s.hoc",cellType[i].technicalType)	// Concatenate the
																				//  path and file
																				
		load_file(tempFileStr)			// Load the file with the template that defines the class
										//  for each cell type
	}
}	
loadCellTemplates()						// Run the newly defined proc

proc calcNetSize(){local i				// Calculate the final network size (after any cell death)

	totalCells = 0						// Initialize totalCells (which counts the number of 'real'
										//  cells) so we can add to it iteratively in the 'for' loop

	ncell = 0							// Initialize ncell (which counts all 'real' and 'artificial'
										//  cells) so we can add to it iteratively in the 'for' loop
	
	prevgid = -1						// Initialize gid setter
	
	for i=0,numCellTypes-1 {
	
		if (cellType[i].layerflag==0 && cellType[i].is_art==0) {	// For cell types in layer 0, which are susceptible to death
		
			cellType[i].numCells = int(cellType[i].numCells * ((100-PercentCellDeath)/100))
										// Calculate the number of cells surviving after cell loss
			
			if (cellType[i].numCells == 0) {cellType[i].numCells = 1}	// If all cells of one type
																		//  are killed, let 1 live
		}
		
		cellType[i].updateGidRange(prevgid+1)	// Update the gid range for each
												//  cell type

		if (cellType[i].is_art==0) {
			totalCells = totalCells + cellType[i].numCells		// Update the total number of cells
																//   after sclerosis, not including
																//   artificial cells
		}
		
		ncell = ncell + cellType[i].numCells 					// Update the total number of cells
																//   after sclerosis, including
																//   artificial cells
		prevgid = cellType[i].cellEndGid
	}
}
calcNetSize()

proc calcBinSize(){local NumGCells

	for i=0, numCellTypes-1 {		// Using the specified dimensions of the network (in um) and
									//  the total number of cells of each type, set the number
									//  of bins in X, Y, Z dimensions such that the cells will be
									//  evenly distributed throughout the allotted volume
									// just changed this so even the stim cells will be allotted, as now we have some
									// stimulation protocols that incorporate stim cell position
	
		cellType[i].setBins(scLongitudinalLength,scTransverseLength,LayerVector.x[cellType[i].layerflag])  
									// For the z length, use the height of the layer in which the
									// cell somata are found for this cell type
	}
}
calcBinSize()

/***********************************************************************************************
III.SET UP PARALLEL CAPABILITY AND WRITE OUT RUN RECEIPT
***********************************************************************************************/
objref pnm, pc, nc, nil
proc parallelizer() {
	pnm = new ParallelNetManager(ncell)	// Set up a parallel net manager for all the cells
	pc = pnm.pc
	pnm.round_robin()					// Incorporate all processors - cells 0 through ncell-1
										//	are distributed throughout the hosts
										//	(cell 0 goes to host 0, cell 1 to host 1, etc)
}
parallelizer()

iterator pcitr() {local i2, startgid	// Create iterator for use as a standard 'for' loop
										//  throughout given # cells usage:
										//  for pcitr(&i1, &i2, &gid, it_start, it_end) {do stuff}
										//  it_start and it_end let you define range over
										//  which to iterate
										//  i1 is the index of the cell on the cell list for that host
										//  i2 is the index of that cell for that cell type on that host
	numcycles = int($4/pc.nhost)
	extra = $4%pc.nhost
	addcycle=0
	if (extra>pc.id) {addcycle=1}
	startgid=(numcycles+addcycle)*pc.nhost+pc.id
	i1 = numcycles+addcycle // the index into the cell # on this host.
	i2 = 0 // the index of the cell in that cell type's list on that host
	if (startgid<=$5) {
		for (i3=startgid; i3 <= $5; i3 += pc.nhost) {	// Just iterate through the cells on
														//  this host(this simple statement
														//  iterates through all the cells on
														//  this host and only these cells because 
														//  the roundrobin call made earlier dealt
														//  the cells among the processors in an
														//  orderly manner (like a deck of cards)
				$&1 = i1
				$&2 = i2
				$&3 = i3
				iterator_statement
				i1 += 1
				i2 += 1
		}
	}
}

objref  strobj
strobj = new StringFunctions()
strdef direx
if (strcmp(UID,"0")==0 && pc.id==0) {
	type = unix_mac_pc() // 1 if unix, 2 if mac, 3 if mswin, or 4 if mac osx darwin
	if (type<3) {
		{system("uuidgen", direx)} // unix or mac
		strobj.left(direx, strobj.len(direx)-1)
	} else {
		{system("cscript //NoLogo setupfiles/uuid.vbs", direx)} // pc
	}
	UID = direx
}

{load_file("./setupfiles/save_run_info.hoc")}

loadtime = startsw() - loadstart		// Calculate the set up time (now - recorded start time) in seconds
if (pc.id == 0) {printf("\nTIME HOST 0: %g seconds (set up)\n************\n", loadtime)}
createstart = startsw()					// Record the start time of the cell creation

/***********************************************************************************************
IV. CREATE, UNIQUELY ID, AND POSITION CELLS
***********************************************************************************************/

objref  memfile, topfile
{zzz=0}
if (pc.id==0) {
	{sprint(cmd,"./results/%s/memory.dat", RunName)}
	{memfile = new File(cmd)}
	{memfile.wopen()}

	{sprint(cmd,"./results/%s/topoutput.dat", RunName)}
	{topfile = new File(cmd)}
	{topfile.wopen()}
}

strdef direx1, direx2, TopCommand

func mallinfo() {local m // this function is a wrapper for the system function mallinfo
        m = nrn_mallinfo(0)
        if (pc.id == 0) {

			if (PrintTerminal>1) {printf("Memory (host 0) - %s: %ld.  Since last call: %ld\n", $s2, m, m - $1)}
			memfile.printf("%s\t%f\t%ld\t%ld\n", $s2, startsw()-loadstart, m, m - $1)	// Print the spike time and spiking cell gid
			
			
			sprint(TopCommand,"top -p `pgrep %s | head -n20 | tr \"\\n\" \",\" | sed 's/,$//'` -n1 -b | tail -n2 | head -n1", TopProc)

			if (strcmp(TopProc,"")!=0) { system(TopCommand, direx1)}
				topfile.printf("%s\t%s\n", $s2, direx1)	// Print the spike time and spiking cell gid
		}
        return m
}

{zzz = mallinfo(zzz, "Prior to creating cells")}

objref cells, ransynlist, ranstimlist, raninitlist
cells = new List()						
ransynlist = new List()
ranstimlist = new List()
raninitlist = new List()
													
{load_file("./setupfiles/create_cells_pos.hoc")}	// Creates each cell on its assigned host
													//  and sets its position using the algorithm
													//  defined above

strdef cmd
{load_file("./setupfiles/write_positions.hoc")}		// Defines the proc to write the position
													//  of each cell to file
													
if (PrintCellPositions>0) {posout()}	// Calls the proc that writes the position of each cell to the
										//  file "position.dat" in the format: gid, x, y, z

createtime = startsw() - createstart	// Calculate time taken to create the cells
if (pc.id == 0) {printf("\nTIME HOST 0: %g seconds (created cells)\n************\n", createtime)}
connectstart = startsw()				// Grab start time of cell connection

oldtimeout = pc.timeout(0)	// Addresses timeout error that was occuring on some computers

zzz = mallinfo(zzz, "After creating cells")

/***********************************************************************************************
V.	CONNECT THE MODEL CELLS AND CONNECT THE STIMULATION CELLS TO SOME MODEL CELLS
***********************************************************************************************/

celsius=34

{load_file("./dipole_lfp.hoc")}

{load_file("./setupfiles/nc_append_functions.hoc")}	// Defines nc_append and nc_appendo, which 
													//  are procs needed to create the netcon
													//  object associated with each synapse

{sprint(cmd,"./connectivity/%s_connections.hoc", Connectivity)}
{load_file(cmd)}			// Loads in a particular definition of the connectCells function,
							//  depending on the value of the Connectivity string

zzz = mallinfo(zzz, "After connecting cells")

{sprint(cmd,"./stimulation/%s_stimulation.hoc", Stimulation)}
{load_file(cmd)}			// Loads in a particular stimulation protocol, including the spike
							//  vectors for the artificial cells and their connections to the
							//  'real' cells if not using 'try_all_randfaststim'

zzz = mallinfo(zzz, "After defining stimulation")

{load_file("./setupfiles/write_conns_functions.hoc")}	// Defines two procs: printNumConFile()
														//  writes the number of synapses between every
														//  combination of pre- and post-synaptic cell type
														//  and tracenet() lists the presynaptic cell type,
														//  postsynaptic cell type, and synapse type for
														//  every connection
														
if (PrintConnSummary==1) {printNumConFile()}	// Write "numcons.dat": a QUICK, SMALL summary file of the # of
												//  connections by pre and post cell types
										
if (PrintConnDetails==2) {tracenetfast()}		// Write "connections.dat": a VERY SLOW, LARGE file of all cell
												//	connections (pre and post gids, synapse type, host on which
												//  target cell exists)

if ((PrintConnDetails==0) && (PrintVoltage==2)) {tracecellsfast()}	// If detailed connections are not being written out, at least write them out for cells that are being traced

connecttime = startsw() - connectstart			// calculate time taken to connect the cells
if (pc.id == 0) {printf("\nTIME HOST 0: %g seconds (connected cells)\n************\n", connecttime)}

/***********************************************************************************************
VI.	INITIALIZE AND RUN NETWORK, OUTPUT RESULT FILES
***********************************************************************************************/

if (PrintVoltage>0) {load_file("./setupfiles/recordvoltageauto.hoc")}	// If we are going to record some voltages, then set up the recordings

{load_file("./setupfiles/randomVinit.hoc")}	// Random voltage initialization

proc presimulation() { local prelength, maindt, temp
    
    prelength = $1
    
    // Save the desired dt value to reset it after temporarily
    //  changing dt to run a quick presimulation to allow the
    //  network to reach steady state before we start 'recording'
    maindt = dt
                                                                        
    t = -prelength 	// Set the start time for (pre) simulation; ex: -500 ms to allow the
					//  network to reach steady state before t=0, when real simulation begins
    
    dt = 10 // Set dt to a large value so that the presimulation runs quickly
    
									
	secondordersav = secondorder	// Save the desired secondorder value to reset it after
									//  temporarily changing secondorder to run a quick presimulation
									//  to allow the network to reach steady state before we start
									//  'recording' its results
  

	secondorder = 0 // Set secondorder to 0 to set the solver to the default fully implicit backward
					//  euler for numerical integration (see NEURON ref)
    
    temp = cvode.active() // Check whether cvode, a type of solver (?) is on
    if (temp!=0) {cvode.active(0)} // If cvode is on, turn it off while running the presimulation
    
    // Run the presimulation from t = -prelength
    //  to t = -100 (why not 0?) to let the
    //  network and all its components reach
    //  steady state. Integrate all section
    //  equations over the interval dt,
    //  increment t by dt, and repeat until
    //  t at -100
    
    while(t<-100) { fadvance() if (PrintTerminal>2) {print t}}	
    
    if (temp!=0) {cvode.active(1)}	// If cvode was on and then turned off, turn it back on now
    
    dt = maindt
	secondorder = secondordersav	// Reset secondorder to the specified value for the simulation
}


proc init() { 
    // Call finitialize from within the custom init proc, just as the default
    //  init proc does. Note that finitialize will call the INITIAL block for
    //  all mechanisms and point processes inserted in the sections and set the
    //  initial voltage to v_init for all sections
    finitialize(v_init)	
    
    // if randomly initializing the voltage, call randomVinit, otherwise call 
    // presimulation, which brings the network to a steady state
    if (RandomVinit > 0) {
        // initialize all cells to random voltage centered on their Vrest with stdev of 1.0
        randomVinit(1.0)
    } else {
        presimulation (200)
    }
    
    t = tstart // Set t to the start time of the simulation
    
    if (cvode.active()){
        // If cvode is active, initialize the integrator
		cvode.re_init()				
    } else {
        // If cvode is not active, make all assigned variables
		// (currents, conductances, etc) consistent with the
		// values of the states
		fcurrent()					
    }
    
    frecord_init() // see email from ted - fadvance() increments the recorder, so we need to fix the index it ends up at
}


{load_file("./setupfiles/write_results_functions.hoc")}		// Defines the procs spikeout() and timeout()
															//  which write out the spikeraster (spikeout)
															//  and the time taken to run each section of
															//  the code (timeout)
use_cache_efficient=1
get_spike_hist=0
use_bin_queue=0
use_spike_compression=0
if (use_spike_compression==1) {
	maxstepval = 2.5
} else {
	maxstepval = 10
}														
															
proc rrun(){									// Run the network simulation and write out the results

	pnm.want_all_spikes() 						// Record all spikes of all cells on this machine into the
												//  vectors pnm.spikevec (spiketimes) and pnm.idvec (gids)
												
	local_minimum_delay = pc.set_maxstep(maxstepval)	// Set every machine's max step size to minimum delay of
														//  all netcons created on pc using pc.gid_connect, but
														//  not larger than 10

	if (pc.id==0 && use_spike_compression==1) {print "Host ", pc.id, " has local_minimum_delay=", local_minimum_delay}
												
	stdinit()									// Call the init fcn (which is redefined in this code) and
												//  then make other standard calls (to stop watch, etc)

	runstart = startsw()							// grab start time of the simulation
	pc.psolve(tstop)							// Equivalent to calling cvode.solve(tstop) but for parallel NEURON;
												//  solve will be broken into steps determined by the result of
												//  set_maxstep

	runtime = startsw() - runstart				// Calculate runtime of simulation
												// Print a time summary message to screen
	writestart = startsw()
	comptime = pc.step_time
	avgcomp = pc.allreduce(comptime, 1)/pc.nhost
	maxcomp = pc.allreduce(comptime, 2)
	if (maxcomp>0) {
		if (pc.id == 0) { printf("load_balance = %.3f\n", avgcomp/maxcomp)}
		if (pc.id == 0) { printf("exchange_time = %.2f ms\n",  runtime - maxcomp) }
	} else {
		if (pc.id == 0) { printf("no load balance info available\nno spike exchange info available\n")}
	}
	
	spikeoutfast()	// Write the spike times (in ms) and spiking cells (by gid) into a file called "spikeraster.dat"
	
	timeout()	// Write out a file of run times for each code section
	
	highIndexout() // document how much of the random streams this run used

	if (PrintVoltage>0) {voltageout()}	// Write out any voltages that were recorded during simulation
	if (PrintConnDetails==1) {tracenetfast()}	// Write the file of all cell connections (pre and post gids, synapse type,
										//  host on which cell exists), "connections.dat"

	if ((PrintConnDetails==0) && (PrintVoltage==1)) {tracecellsfast()}	// If detailed connections are not being written out, at least write them out for cells that are being traced
	
	sumnumout(runtime)	// Write out a file with the total number of cells, spikes, and connections (including contributions from artificial cells)
	writetime = startsw() - writestart				// Calculate write time of program
	totaltime = startsw() - loadstart
	allottedtime = JobHours*3600
	if (pc.id == 0) {printf("****\nTIME SUMMARY for host 0\nset up in %g seconds\ncreated cells in %g seconds\nconnected cells in %g seconds\nran simulation in %g seconds\nwrote results in %g seconds\nTOTAL TIME   = %g seconds\nALLOTTED TIME = %g seconds\n************\nThis run is called: %s\n************\n", loadtime, createtime, connecttime, runtime, writetime, totaltime, allottedtime, RunName)}
    }
    
    objref fih
    if (ComputeLFP > 0) {
        // execute sample_lfp() at t = 0,
        // right after the mechanism INITIAL blocks have been executed
        fih = new FInitializeHandler("sample_lfp()")
    }
    
    objref fihw
    fihw = new FInitializeHandler(2, "midbal()")
walltime = startsw()
strdef cmd, cmdo
newtstop = tstop
warningflag=0
proc midbal() {local wt, thisstep
	wt = startsw()
	if (t>0) {
		thisstep = wt - walltime
		simleft = tstop - t
		compleft = JobHours*3600 - (startsw() - loadstart)
		//print "t=",t,", tstop=",tstop,", simleft=",simleft,", jobtime=",JobHours*3600,", timeused=",startsw() - loadstart,", compleft=", compleft 
		if (warningflag==0 && (simleft/StepBy*thisstep+EstWriteTime)>compleft && pc.id == 0) {
			newtstop = int((compleft-EstWriteTime)/thisstep)*StepBy + t
			print "Not enough time to complete ", tstop,  " ms simulation, simulation will likely stop around ", newtstop, " ms"
			warningflag=1
		}
		if (pc.id == 0) { printf("%g ms interval at t=%g ms was %g s\n", StepBy, t, thisstep) }
		
		if ((thisstep+EstWriteTime)>compleft && t<tstop) { // not enough time for another step, end now
			{pc.barrier()}
			sprint(cmd,"cat results/%s/runreceipt.txt | sed -e 's/^SimDuration = [^ ]*/SimDuration = %g;/' > x ; mv x results/%s/runreceipt.txt", RunName, t, RunName)
			if (pc.id == 0) { {system(cmd,cmdo)} }
			if (pc.id == 0) { print "simulation stopped early at t=", t, " ms"}
			tstop = t
			stoprun=1
		}
	}
	walltime = wt
	cvode.event(t+StepBy, "midbal(0)")
}
{cvode.cache_efficient(use_cache_efficient)} // always double check that this addition does not affect the spikeraster (via pointers in mod files, etc)

if (use_bin_queue==1) {
	use_fixed_step_bin_queue = 1 // boolean
	use_self_queue = 0 // boolean - this one may not be helpful for me, i think it's best for large numbers of artificial cells that receive large numbers of inputs
	{mode = cvode.queue_mode(use_fixed_step_bin_queue, use_self_queue)}
}

if (use_spike_compression==1) {
	nspike = 3 // compress spiketimes or not
	gid_compress = 0 //only works if fewer than 256 cells on each proc
	{nspike = pc.spike_compress(nspike, gid_compress)}
}

objref spkhist
if (get_spike_hist==1) {
	spkhist = new Vector(pc.nhost)
	if (pc.id==0) {
		pc.max_histogram(spkhist)
	}
}

zzz = mallinfo(zzz, "Before running simulation")

{rrun()}	// Run the network simulation (in proc rrun)

zzz = mallinfo(zzz, "After running simulation")

if (pc.id==0) {
	{memfile.close()}
	{topfile.close()}
}

objref f4
strdef cmd
if (pc.id==0 && get_spike_hist==1) {
	sprint(cmd,"./results/%s/spkhist.dat", RunName)
	f4 = new File(cmd)
	f4.wopen()

			// Open for appending to file
	for i=0, pc.nhost-1 {
		f4.printf("%d\t%d\n", i, spkhist.x[i])	// Print the spike time and spiking cell gid
	}
	f4.close()
    }
    
objref lfpvec
if (pc.id==0 && (ComputeLFP > 0)) {
    
    sprint(cmd,"./results/%s/lfp.dat", RunName)
    f4 = new File(cmd)
    f4.wopen()
    
    // Open for appending to file
    for i=0, lfplist.count()-1 {
        lfpvec = lfplist.o(i)
	f4.printf("%g\t%g\n", lfpvec.x[0], lfpvec.x[1])	// Prints time and average LFP value
    }
    f4.close()
}

{pc.barrier}
{quit()}

/*
// Old quit method
{pc.runworker()} 	// Everything after this line is executed only by the host node
					//  The NEURON website describes this as "The master host returns immediately. Worker hosts
					//  start an infinite loop of requesting tasks for execution." 
{pc.done()}			// Sends the quit message to the worker processors, which then quit NEURON
quit()	// Sends the quit message to the host processor, which then quits NEURON
*/
