objref nclist
nclist = new List()
func nc_append() { localobj cell, nc	// Connect cell to synapse and set synapse properties
	if (pc.gid_exists($2)) {			// Check if cell exists on this machine
		cell = pc.gid2cell($2)	
		if (($1==1132) && ($2==1132)) {
		print cell
		print "list cell: ", cell.pre_list.count(), ", ", cell.pre_list.o($3)
		print "list syn: ", cell.pre_list.o($3).count(), ", ", cell.pre_list.o($3).o($4)
		print cell.pre_list.o($3).o($4).e
		// printf("cell.gid=%g %g\n", cell.gid, $2)
	}
		//if (pc.id==0) {printf("make a conn from %g to %g, pretype %g and synapse %g\n\t pre owned %d  post owned %d\n\n", $1, $2, $3, $4, pc.gid_exists($1), pc.gid_exists($2))}
		nc = pc.gid_connect($1, cell.pre_list.o($3).o($4))	// Connect the soma of the pre cell to the synapse on the post cell
		nc.weight = $5					// Set a synaptic connection weight
		nc.delay = $6					// Set a delay time (axonal delay)
		nclist.append(nc)
		//## printf("pc %g append pre = %g post = %g syntype = %g\n", pc.id, $1, $2, $4) 
	}
	return nclist.count-1
}

func nc_appendo() { localobj  nc	// Connect cell to synapse and set synapse properties
		nc = pc.gid_connect($1, $o2.pre_list.o($3).o($4))	// Connect the soma of the pre cell to the synapse on the post cell
		nc.weight = $5					// Set a synaptic connection weight
		nc.delay = $6					// Set a delay time (axonal delay)
		nclist.append(nc)
		//## printf("pc %g appendo pre = %g syntype = %g\n", pc.id, $1, $4) 
	return nclist.count-1
}
