proc perfpathStims() { local i, wgt, reli, typei, jgid, celltype, counter, jstart, jend, jtot localobj cell
	// find ca3cell index
	for celltype=0, numCellTypes-1 {
		if (strcmp(cellType[celltype].cellType_string, "ca3ripcell")==0) {
		    ca3rip_idx = celltype 
	        }
		if (strcmp(cellType[celltype].cellType_string, "oncell")==0) {
		    oncell_idx = celltype 
                    
	        }
            }
            
            // connect oncells to ca3 'ripple' cells
            for pcitr(&reli, &typei, &jgid, cellType[ca3rip_idx].cellStartGid, cellType[ca3rip_idx].cellEndGid) {
                
                if (pc.gid_exists(jgid)) {
                    
                    cell = pc.gid2cell(jgid) // ca3ripcell
                    
                    nc_appendo(cellType[oncell_idx].cellStartGid, cell, oncell_idx, 0, 1.0, 3) // 3ms delay
	        }
                
                
            }
                
}
perfpathStims()

// TODO:
// set start of oncell to 50 
// set number to 1, triggering a single ripple

// TODO: set start of ripple cell to -1 to prevent from starting on its own
// set number to 5-12 
// set interval to 5 ms (??)
// set noise to 0

proc setupburst() {localobj onstimobj, offstimobj
	onstimobj = pc.gid2cell(pc.id) // what are the gids for these things?
	offstimobj = pc.gid2cell(pc.id+pc.nhost) // what are the gids for these things?
	set_ctrl_stims(onstimobj,offstimobj)

	proc set_ctrl_stims() { // first argument is the on NetStim object, second is off
		$o1.interval = Onint+Offint
		$o1.number = 1e9
		$o1.start = Offint
		$o1.noise = 0

		$o2.interval = Onint+Offint
		$o2.number = $o1.number
		$o2.start = 0
		$o2.noise = $o1.noise
	}
setupburst()

proc addstims() {local reli, typei, jgid localobj cell, onstimobj, offstimobj
	for pcitr(&reli, &typei, &jgid, cellType[idx].cellStartGid+pc.nhost*2, cellType[idx].cellEndGid) {
		if (pc.gid_exists(jgid)) {
			cell = pc.gid2cell(jgid)
			ransynlist.object(reli).r.negexp(1) // always use 1 for this - the interval for the netstim will set the 'rate'
							// for another example (which has the randomstream class defined differently,
							// and therefore calls different commands at different times) see the following file:
							// <http://senselab.med.yale.edu/modeldb/showmodel.asp?model=83319&file=\destexhe_benchmarks\NEURON\common\netstim.hoc>
							// use the ransynlist because we can continue along this stream for a very long time
							// ranconlist is a small segment reserved upstream of ransynlist, so if there is
							// a long simulation duration, then there could be a problem
			//cell.noiseFromRandom(ransynlist.object(reli).r)
			cell.interval = 1000/RipStim //ms
			cell.noise = 0
			// pick a number between 0 and 1/2 of RipStim/1000*Onint
			// that number gives the start time = # * 5 ms
			// and the number of spikes = # * 2
			MaxSpikes = (Onint/2)*(RipStim/1000)
			ransynlist.object(reli).r.discunif(0,MaxSpikes)
			halfSpikes = ransynlist.object(reli).repick
			ondelay = (MaxSpikes - halfSpikes)*(1000/RipStim)
			cell.start = Offint + ondelay
			cell.number = halfSpikes*2 + 1

			onstimobj = pc.gid2cell(pc.id) // what are the gids for these things?
			offstimobj = pc.gid2cell(pc.id+pc.nhost) // what are the gids for these things?
			add_on_off(jgid, ondelay, onstimobj, offstimobj)
			//cellType[0].numCons.x[0] +=2
		    }
	        }	
            }
            
	    proc add_on_off() {localobj ns, ctrlsyn, offsyn	// arg 1: gid of the netstim to which the control on and off netstims must be attached
				// arg 2: object of the on NetStim
			        // arg 3: object of the off NetStim
													
		ns = pc.gid2cell($1)

		ctrlsyn = new NetCon($o3, ns)
		ctrlsyn.weight = 1
		ctrlsyn.delay = $2
		nclist.append(ctrlsyn)


		offsyn = new NetCon($o4, ns)
		offsyn.weight = -1
		offsyn.delay = 0
		nclist.append(offsyn)
	}
addstims()


proc quietEC() {local reli, typei, jgid localobj cell, onstimobj, offstimobj
	for celltype=0, numCellTypes-1 {
		if (strcmp(cellType[celltype].cellType_string, "eccell")==0) {
			idx = celltype 
		}
	}

	for pcitr(&reli, &typei, &jgid, cellType[idx].cellStartGid+pc.nhost*2, cellType[idx].cellEndGid) {
		if (pc.gid_exists(jgid)) {
			cell = pc.gid2cell(jgid)
			ransynlist.object(reli).r.negexp(1) // always use 1 for this - the interval for the netstim will set the 'rate'
				// for another example (which has the randomstream class defined differently,
				// and therefore calls different commands at different times) see the following file:
				// <http://senselab.med.yale.edu/modeldb/showmodel.asp?model=83319&file=\destexhe_benchmarks\NEURON\common\netstim.hoc>
				// use the ransynlist because we can continue along this stream for a very long time
				// ranconlist is a small segment reserved upstream of ransynlist, so if there is
				// a long simulation duration, then there could be a problem
			cell.noiseFromRandom(ransynlist.object(reli).r)
			cell.interval = 1000/DegreeStim //ms
			cell.start = 0
			cell.number = 1e9
		}
	}	
}
quietEC()