begintemplate CCKBasketCell
public init
public mechinit, insert_mechs, set_biophys, get_root
public pre_list, connect_pre, is_art, is_connected, gid
public sections, all, basal_list, apical_list, soma_list, axon_list, dendrite_list, ais_list, hillock_list
public x, y, z, position
public dendidx, apicalidx, basalidx, somaidx, axonidx, aisidx, hilidx
public syns, layers, ndendpts


// strings
strdef myroot

// objects
objref syn, pre_list, templist, rootlist, this
objref dendidx, apicalidx, basalidx, somaidx, axonidx, aisidx, hilidx
objref syns, layers, ndendpts

create sections[1]

proc assert() { local test strdef errmsg
    
    test = $1
    errmsg = $s2
    
    if (!test) {
        execerror ("Assertion failed: ", errmsg)
    }
}


proc init() {
	gid = $1
        
        apicalidx = new Vector()
        basalidx = new Vector()
        somaidx = new Vector()
        dendidx = new Vector()
        axonidx = new Vector()
        aisidx = new Vector()
        hilidx = new Vector()
        layers = new List()
        syns = new List()
        
        shape_from_python($o3,$o8,$o9,$o10,$o11)
        topol_from_python($o3,$o5,$o6,$o7,$o12)
        layers_from_python($o3,$o4)
        
	define_shape()		// builtin fcn: fill in 3d info for sections defined by only L and diam, translate 3d points for consistency with their connections 
            
  	append_sections()	// local fcn: append all sections to the section list
	set_nseg()			// local fcn: set the number of segments in each section
	get_root()			// local fcn: perform morphology checks

	// electrophysiology
	mechinit()			// local fcn: set values for max conductances and reversal potentials of ion channels and other ephys parameters that are subject to fitting
	insert_mechs()		// local fcn: insert ion channels and actually set values determined in the mechinit fcn
	set_chanparams()	// local fcn: after all channels have been inserted, then their other parameters can be set	
}

objref all, basal_list, apical_list, dendrite_list, soma_list, axon_list, ais_list, hillock_list
proc append_sections() { local i
	objref all, basal_list, apical_list, dendrite_list, soma_list, axon_list

	all = new SectionList()
	basal_list = new SectionList()
	apical_list = new SectionList()
	soma_list = new SectionList()
	axon_list = new SectionList()
	ais_list = new SectionList()
	hillock_list = new SectionList()
	dendrite_list = new SectionList()

	sections[somaidx.x[0]] all.append()
	sections[somaidx.x[0]] soma_list.append()
        for i=0, dendidx.size()-1 {
		sections[dendidx.x[i]] all.append()
		sections[dendidx.x[i]] dendrite_list.append()
	}

	for i=0, apicalidx.size()-1 {
		sections[apicalidx.x[i]] apical_list.append()
	}

	for i=0, basalidx.size()-1 {
		sections[basalidx.x[i]] basal_list.append()
	}

	for i=0, axonidx.size()-1 {
		sections[axonidx.x[i]] axon_list.append()
	}
}


external lambda_f
proc set_nseg() {
  	forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
    }
    
    
    
proc mechinit() {
        
	// resting membrane potential. Must lie between Na+ and K+ reversal potentials
	Vrest=-61
	
	// Temperature of simulation
	celsius = 34.0  

	// Membrane resistance in ohm*cm2
	RmDend = 27000 // 30000
	RmSoma = 27000 // 30000 

	// Membrane capacitance in uF/cm2
	CmSoma= 1.0 // 1.8
	CmDend = 1.0 // 1.8

	// Axial resistance in ohm*cm
	RaDend= 150 //75*3
	RaSoma= 150 //75*3	
	
	// Calcium concentrations in mM
	ca_outside = 2
	ca_inside = 5.e-6 // 50.e-6
	catau = 10

	// reversal potentials in mV
	ekval = -90	
	enaval = 55
	eHCNval = -40
	ecaval = 8.314*(273.15+celsius)/(2*9.649e4)*log(ca_outside/ca_inside)*1000 // about 170, otherwise set to 130
	
	if (Vrest<ekval) Vrest=ekval // Cell cannot rest lower than K+ reversal potential
	if (Vrest>enaval) Vrest=enaval // Cell cannot rest higher than Na+ reversal potential
	eleakval = Vrest

	// max ion channel conductances in mho/cm2
 	gNav     = 0.005*1.8 // soma: // 0.12 //original 0.030 to .055 ; lm: //0.5  	//original 0.015
	gKdr     = 0.003    // Delayed rectifier potassium
 	gKGroup  = 0.0011 //0.1465/1
 	gKvA 	 = 0.0010 // Proximal A-type potassium
	gHCN     = 0.00002 // HCN (hyperpolarization-activated cyclic nucleotide-gated channel)
 	gCavN    = 0.00001 //   N-type calcium
 	gCavL    = 0.00025 //  L-type calcium
 	gKvCaB	 = 0.0001 // Big potassium channel: voltage and calcium gated 
	gKCaS	 = 0.02 //  Small potassium channel: calcium gated	
	gKvM	 = 0.06
        
    }
    
proc insert_mechs() {
        
	forsec all {
		insert iconc_Ca
						
		
		insert ch_KvA
		gmax_ch_KvA = gKvA		// A-type K+ conductance
		
		insert ch_CavN  			// N-type Ca2+ conductance
		gmax_ch_CavN = gCavN
		
		insert ch_CavL
		gmax_ch_CavL = gCavL
		
		insert ch_KCaS
		gmax_ch_KCaS = gKCaS
		
		insert ch_KvCaB
		gmax_ch_KvCaB = gKvCaB

		insert ch_HCN
		gmax_ch_HCN=gHCN

		Ra = RaSoma
	} 

	forsec soma_list {
		insert ch_Navcck//cck	
		gmax_ch_Navcck = gNav
		ena = enaval
		insert ch_Kdrfast
		gmax_ch_Kdrfast = gKdr
		insert ch_KvGroup
		gmax_ch_KvGroup = gKGroup
		
		insert ch_KvM
		gmax_ch_KvM = gKvM		// M-type K+ conductance
		
		insert ch_leak
		gmax_ch_leak = 1/RmSoma
		cm=CmSoma
	} 

	sections[somaidx.x[0]] {
	    distance()
        }
        
	forsec dendrite_list {
		insert ch_leak
		gmax_ch_leak = 1/RmDend
		cm=CmDend
		
		for (x,0) {
			if (distance(x)<100) {
				insert ch_Navcck//cck
				gmax_ch_Navcck(x)=gNav*.5
				ena = enaval
				insert ch_Kdrfast
				gmax_ch_Kdrfast(x)=gKdr //*10

				insert ch_KvGroup
				gmax_ch_KvGroup(x) = gKGroup/2 //*2
			    }
		        }
	            }	
                    
                }
                
proc set_chanparams() {
    forsec all {
		ek = ekval
		eca = ecaval
		e_ch_leak = eleakval
		cao_iconc_Ca = ca_outside
	}

}


	proc connect_pre() {  // $o1 target point process, $o2 returned NetCon
	soma $o2 = new NetCon (&v(1), $o1)
			$o2.threshold = -10

	}

	func is_art()  { return 0 }

proc position(){ local i
	forall {
		for i = 0, n3d()-1 {
			pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
		}
	}
	x = $1  y = $2  z = $3	
}

proc get_root() {local i localobj sref
	rootlist = new SectionList()
	rootlist.allroots()
	i=0
	forsec all {
		sref = new SectionRef()
		if (sref.has_parent==0) {
			myroot = secname()
			i=i+1
		}
		for(x,0) {
			if (diam(x) <=0.01) print "WARNING: tiny diameter of ",  diam(x), " um at ", secname(), ", point ", x, "!"
			if (diam3d(x) <=0.01) print "WARNING: tiny 3d diameter of ", diam3d(x), " um at ", secname(), ", point ", x, "!"
		}
		if (L <=0.001) print "WARNING: tiny length of ", L, " um at ", secname(), "!"
	}
	if (i>1) {
		print "WARNING: cell ", gid, " has ", i, " root sections!"
	    }
        }
        

proc topol_from_python() { local i,j,p,s,dimsize localobj vidxs, vsrc, vdst, vloc, secnodes, swc_types, smembers
    
    secnodes = $o1
    vsrc     = new Vector($o2)
    vdst     = new Vector($o3)
    vloc     = new Vector($o4)
    swc_types = new Vector($o5)
    smembers = new Vector()
    ndendpts = new Vector()
    ndendpts.resize(secnodes.__len__())
    
    nDends = 0
    nSoma  = 0
    nAxon  = 0
    nAIS   = 0
    nHill  = 0

    for s=0, secnodes.__len__()-1 {
        vidxs = new Vector(secnodes.__getitem__(s))
        ndendpts.x[s] = vidxs.size()
        l = vidxs.x[vidxs.size()-1]
        swc_type = swc_types.x[l]
        if (swc_type == 3) {
            nDends = nDends + 1
            basalidx.append(s)
            dendidx.append(s)
        }
        if (swc_type == 4) {
            nDends = nDends + 1
            apicalidx.append(s)
            dendidx.append(s)
        }
        if (swc_type == 8) {
            hilidx.append(s)
            nHill = nHill + 1
            nAxon = nAxon + 1
        }
        if (swc_type == 7) {
            aisidx.append(s)
            nAIS = nAIS + 1
            nAxon = nAxon + 1
        }
        if (swc_type == 2) {
            axonidx.append(s)
            nAxon = nAxon + 1
        }
        if (swc_type == 1) {
            somaidx.append(s)
            nSoma = nSoma + 1
        }

    }
    
    
    for p = 0, vsrc.size-1 {
        i = vsrc.x[p]
        j = vdst.x[p]
        l = vloc.x[p]
        assert (i >= 0,  "compartment index in topology matrix is less than zero")
        assert (j >= 0,  "compartment index in topology matrix is less than zero")
        assert (i < nDends+nSoma+nAxon+1,  "compartment index in topology matrix is greater than the number of compartments")
        assert (j < nDends+nSoma+nAxon+1,  "compartment index in topology matrix is greater than the number of compartments")
        sections[i] loc = arc3d(l) / L
        connect sections[j](0),sections[i](loc)
        
    }
    
    vloc.resize(0)
    vsrc.resize(0)
    vdst.resize(0)
    smembers.resize(0)
    swc_types.resize(0)
}



proc shape_from_python() { local i,j,k,s localobj secnodes, vx, vy, vz, vradius, idxs, vidxs
    
    secnodes = $o1
    vx = new Vector($o2)
    vy = new Vector($o3)
    vz = new Vector($o4)
    vradius = new Vector($o5)
    
    create sections[secnodes.__len__()]
    for s=0, secnodes.__len__()-1 {
        idxs = secnodes.__getitem__(s)
        vidxs = new Vector(idxs)
        sections[s] {
            pt3dconst(0)
            for i=0, vidxs.size()-1 {
                k = vidxs.x[i]
                pt3dadd(vx.x[k], vy.x[k], vz.x[k], 2*vradius.x[k]) 
            }
        }
    }
    
    vx.resize(0)
    vy.resize(0)
    vz.resize(0)
    vradius.resize(0)
    
}

proc layers_from_python() { local i,j,k,s localobj secnodes, vlayer, seclayers, idxs, vidxs
    
    secnodes = $o1
    vlayer = new Vector($o2)
    
    for s=0, secnodes.__len__()-1 {
        layers.append(new Vector())
    }
    
    for s=0, secnodes.__len__()-1 {
        idxs = secnodes.__getitem__(s)
        vidxs = new Vector()
        vidxs.from_python(idxs)
        seclayers = layers.o(s)
        k = vidxs.x[0]
        for i=0, vidxs.size()-1 {
            k = vidxs.x[i]
            seclayers.append(vlayer.x[k])
        }
    }
    
    vlayer.resize(0)
}

        
        


endtemplate CCKBasketCell
